<?xml version="1.0" encoding="ISO-8859-1"?>
<config>

  <!-- The starting directory. -->
  <directory type="directory">D:/Data/</directory>
  
  <!-- The setup name -->
  <setup_name type="string">STORM</setup_name>

  <!-- The ui type, this is 'classic' or 'detached' -->
  <ui_type type="string">classic</ui_type>

  <!--
      This has two effects:
      
      (1) If this is True any exception will immediately crash HAL, which can
      be useful for debugging. If it is False then some exceptions will be
      handled by the modules.
      
      (2) If it is False we also don't check whether messages are valid.
  -->
  <strict type="boolean">True</strict>
  
  <!--
      Define the modules to use for this setup.
  -->
  <modules>

    <!--
	This is the main window, you must have this.
    -->
    <hal>
      <class_name type="string">HalController</class_name>
      <module_name type="string">storm_control.hal4000.hal4000</module_name>
    </hal>

    <!--
	You also need all of these.
    -->

    <!-- Camera display. -->
    <display>
      <class_name type="string">Display</class_name>
      <module_name type="string">storm_control.hal4000.display.display</module_name>
      <parameters>

	<!-- The default color table. Other options are in hal4000/colorTables/all_tables -->
	<colortable type="string">ramp.ctbl</colortable>

      </parameters>
    </display>
    
    <!-- Feeds. -->
    <feeds>
      <class_name type="string">Feeds</class_name>
      <module_name type="string">storm_control.hal4000.feeds.feeds</module_name>
    </feeds>

    <!-- Filming and starting/stopping the camera. -->
    <film>
      <class_name type="string">Film</class_name>
      <module_name type="string">storm_control.hal4000.film.film</module_name>

      <!-- Film parameters specific to this setup go here. -->
      <parameters>
	<extension desc="Movie file name extension" type="string" values=",A647,Cy5,Cy3,Cy2,A405,FITC,YFP,GFP,BF"></extension>
      </parameters>
    </film>

    <!-- Which objective is being used, etc. -->
    <mosaic>
      <class_name type="string">Mosaic</class_name>
      <module_name type="string">storm_control.hal4000.mosaic.mosaic</module_name>

      <!-- List objectives available on this setup here. -->
      <parameters>
	<flip_horizontal desc="Flip image horizontal (mosaic)" type="boolean">True</flip_horizontal>
	<flip_vertical desc="Flip image vertical (mosaic)" type="boolean">True</flip_vertical>
	<transpose desc="Transpose image (mosaic)" type="boolean">True</transpose>

	<objective desc="Current objective" type="string" values="obj1,obj2">obj1</objective>
\	<obj1 desc="Objective 1" type="custom">100x,0.160,0.0,0.0</obj1>
	<obj2 desc="Objective 2" type="custom">10x,1.6,0.0,0.0</obj2>	
      </parameters>
    </mosaic>

    <!-- Loading, changing and editting settings/parameters -->
    <settings>
      <class_name type="string">Settings</class_name>
      <module_name type="string">storm_control.hal4000.settings.settings</module_name>
    </settings>

    <!-- Set the time base for films. -->
    <timing>
      <class_name type="string">Timing</class_name>
      <module_name type="string">storm_control.hal4000.timing.timing</module_name>
      <parameters>
	<time_base type="string">camera1</time_base>
      </parameters>
    </timing>
  
    <!--
	Everything else is optional, but you probably want at least one camera.
    -->

    <!-- Camera control. -->
    <!--
	Note that the cameras must have the names "camera1", "camera2", etc..
	
	Cameras are either "master" (they provide their own hardware timing)
	or "slave" they are timed by another camera. Each time the cameras
	are started the slave cameras are started first, then the master cameras.
    -->

    <camera1>
      <class_name type="string">Camera</class_name>
      <module_name type="string">storm_control.hal4000.camera.camera</module_name>  
      <camera>
	<master type="boolean">True</master>
	<class_name type="string">AndorCameraControl</class_name>
	<module_name type="string">storm_control.hal4000.camera.andorCameraControl</module_name>
	<parameters>

	  <!-- The location of the Andor DLL. -->
	  <andor_path type="string">C:/Program Files/Andor SDK/</andor_path>

	  <!-- The name of the Andor DLL. -->
	  <andor_dll type="string">atmcd64d.dll</andor_dll>

	  <!-- Which camera to use -->
	  <camera_id type="int">0</camera_id>

	  <!-- These are the display defaults, not the camera range. -->
	  <default_max type="int">2000</default_max> 
	  <default_min type="int">100</default_min>
	  <flip_horizontal type="boolean">False</flip_horizontal>
	  <flip_vertical type="boolean">False</flip_vertical>
	  <transpose type="boolean">True</transpose>

	  <!-- These can be changed / editted. -->

	  <!-- This is the extension to use (if any) when saving data from this camera. -->
	  <extension type="string"></extension>
	  
	  <!-- Whether or not data from this camera is saved during filming. -->
	  <saved type="boolean">True</saved>

	</parameters>
      </camera>
	  
    </camera1>

    <ctech_aotf>
      <module_name type="string">storm_control.sc_hardware.crystalTechnologies.aotfModule</module_name>
	  <class_name type="string">AOTF64BitModule</class_name>
      <configuration>
	<use_fsk type="boolean">False</use_fsk>
	<fsk_mode type="int">1</fsk_mode>
	<!-- <python32_exe type="string">C:/Users/STORM/AppData/Local/Programs/Python/Python36-32/python</python32_exe> -->
	<!--<python32_exe type="string">C:\Users\STORM\.conda\envs\py36</python32_exe> -->
	<python32_exe type="string">C:/Users/STORM/AppData/Local/Programs/Python/Python36-32/python</python32_exe>
	<!--
	<python32_exe type="string">C:/Users/hazen/AppData/Local/Programs/Python/Python39-32/python</python32_exe>
	-->
	
	<ch642>
	  <maximum type="int">2500</maximum>
	  <channel type="int">0</channel>
	  <off_frequency type="float">20.0</off_frequency>
	  <on_frequency type="float">52.01</on_frequency>
	</ch642>

	<ch560>
	  <maximum type="int">2500</maximum>
	  <channel type="int">1</channel>
	  <off_frequency type="float">20.0</off_frequency>
	  <on_frequency type="float">61.73</on_frequency>
	</ch560>
	
	<ch488>
	  <maximum type="int">7100</maximum>
	  <channel type="int">2</channel>
	  <off_frequency type="float">20.0</off_frequency>
	  <on_frequency type="float">73.91</on_frequency>
	</ch488>
	
	<ch405>
	  <maximum type="int">5100</maximum>
	  <channel type="int">3</channel>
	  <off_frequency type="float">20.0</off_frequency>
	  <on_frequency type="float">100.5</on_frequency>
	</ch405>
	
	<ch642x>
	  <maximum type="int">2500</maximum>
	  <channel type="int">4</channel>
	  <off_frequency type="float">20.0</off_frequency>
	  <on_frequency type="float">51.50</on_frequency>
	</ch642x>
	
	<ch560x>
	  <maximum type="int">2500</maximum>
	  <channel type="int">5</channel>
	  <off_frequency type="float">20.0</off_frequency>
	  <on_frequency type="float">61.23</on_frequency>
	</ch560x>
	
      </configuration>
    </ctech_aotf>

    <!-- Illumination (lasers, shutters, etc) control GUI. -->
    <illumination>
      <class_name type="string">Illumination</class_name>
      <module_name type="string">storm_control.hal4000.illumination.illumination</module_name>
      <configuration>

	<!-- Note: The name of the channel is the gui_name.
	     XML tags cannot start with numbers. -->
		 
	<ch1>
	  <gui_name type="string">642</gui_name>
	  <color type="string">255,22,0</color>
	  <amplitude_modulation>
	    <hw_fn_name>ctech_aotf.ch642</hw_fn_name>
	  </amplitude_modulation>
	</ch1>
	<ch2>
	  <gui_name type="string">560</gui_name>
	  <color type="string">195,255,0</color>
	  <amplitude_modulation>
	    <hw_fn_name>ctech_aotf.ch560</hw_fn_name>
	  </amplitude_modulation>
	</ch2>
	<ch3>
	  <gui_name type="string">488</gui_name>
	  <color type="string">0,247,255</color>
	  <amplitude_modulation>
	    <hw_fn_name>ctech_aotf.ch488</hw_fn_name>
	  </amplitude_modulation>
	</ch3>
	<ch4>
	  <gui_name type="string">405</gui_name>
	  <color type="string">130,0,200</color>
	  <amplitude_modulation>
	    <hw_fn_name>ctech_aotf.ch405</hw_fn_name>
	  </amplitude_modulation>
	</ch4>
	<ch5>
	  <gui_name type="string">642x</gui_name>
	  <color type="string">122,0,0</color>
	  <amplitude_modulation>
	    <hw_fn_name>ctech_aotf.ch642x</hw_fn_name>
	  </amplitude_modulation>
	</ch5>
	<ch6>
	  <gui_name type="string">560x</gui_name>
	  <color type="string">99,127,0</color>
	  <amplitude_modulation>
	    <hw_fn_name>ctech_aotf.ch560x</hw_fn_name>
	  </amplitude_modulation>
	</ch6>
      </configuration>
    </illumination>
	

	<!-- Spot counter and GUI -->
	<spotcounter>
		<class_name type="string">SpotCounter</class_name>    
		<module_name type="string">storm_control.hal4000.spotCounter.spotCounter</module_name>
		<configuration>
	<max_threads type="int">40</max_threads>
	<max_size type="int">1100000</max_size>
		</configuration>
	</spotcounter>

  </modules>
  
</config>
